PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1000, 800]
  expName = AttentionMemory
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!
        In this study, you will view images in two conditions:
        - Full Attention: Focus only on the images.
        - Divided Attention: Focus on the images while solving math problems.
        After each condition, you will recall as many images as possible.
        Press SPACEBAR to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stimImage
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    ImageComponent Image1
      image = $Image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine DividedAttention
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    TextComponent MathText
      letterHeight = 0.05
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = $MathProblem
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    KeyboardComponent key_resp_2
      allowedKeys = '0', '1', '2', '3', '4', '5', '6', '7', '8', '9', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine Recall_Task
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  Routine Recall_Task_
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    TextComponent text1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Please type the names of the images you remember seeing.
        Press Enter when done.
    TextboxComponent RecallBox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine Recall_Task_2
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Please type the names of the images you remember seeing.
        Press Enter when done.
    TextboxComponent RecallBox1
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/prernabhandari/Desktop/Images/stimuli_fullattention.xlsx
    loopType = random
    nReps = 23
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    conditions:
      [{'Images': 'file:///Users/prernabhandari/Desktop/Images/p1.webp'},
      {'Images': 'file:///Users/prernabhandari/Desktop/Images/p2.jpeg'},
      {'Images': 'file:///Users/prernabhandari/Desktop/Images/p3.jpeg'},
      {'Images': 'file:///Users/prernabhandari/Desktop/Images/p4.jpeg'},
      {'Images': 'file:///Users/prernabhandari/Desktop/Images/p5.jpeg'},
      {'Images': 'file:///Users/prernabhandari/Desktop/Images/p6.jpeg'},
      {'Images': 'file:///Users/prernabhandari/Desktop/Images/p7.jpeg'},
      {'Images': 'file:///Users/prernabhandari/Desktop/Images/p8.jpeg'},
      {'Images': 'file:///Users/prernabhandari/Desktop/Images/p9.jpeg'},
      {'Images': 'file:///Users/prernabhandari/Desktop/Images/p10.jpeg'}]
    Routine stimImage
  LoopTerminator trials
  Routine Recall_Task_
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = /Users/prernabhandari/Desktop/Images/stimuli_dividedattention.xlsx
    loopType = random
    nReps = 23
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    conditions:
      [{'Image': 'p1.webp', 'MathProblem': '12\xa0+\xa08\xa0=\xa0?'},
      {'Image': 'p2.jpeg', 'MathProblem': '7 + 6 = ?'},
      {'Image': 'p3.jpeg', 'MathProblem': '5 × 3 = ?'},
      {'Image': 'p4.jpeg', 'MathProblem': '14 - 9 = ?'},
      {'Image': 'p5.jpeg', 'MathProblem': '8 + 15 = ?'},
      {'Image': 'p6.jpeg', 'MathProblem': '4\xa0+\xa07\xa0=\xa0?'},
      {'Image': 'p7.jpeg', 'MathProblem': '14\xa0+\xa07\xa0=\xa0?'},
      {'Image': 'p8.jpeg', 'MathProblem': '4\xa0+\xa015\xa0=\xa0?'},
      {'Image': 'p9.jpeg', 'MathProblem': '13\xa0-\xa05\xa0=\xa0?'},
      {'Image': 'p10.jpeg', 'MathProblem': '19\xa0-\xa010\xa0=\xa0?'}]
    Routine DividedAttention
  LoopTerminator trials_2
  Routine Recall_Task_2
