PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1000, 800]
  expName = AttentionVisualMemory
  keyboardBackend = Pyglet
  runMode = 0
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Routines
  Routine trial
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    TextComponent Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Welcome to the experiment!
        You will view a series of images under two conditions:
        - Full Attention: Focus only on the images.
        - Divided Attention: Focus on the images while solving math problems.
        Press space key to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Fullattenton
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    ImageComponent image
      image [set every repeat] = Fullattention.xlsx
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = "Focus on the image"
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  Routine Dividedattention
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent Image2
      image [set every repeat] = stimuli_with_math.xlsx
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine Recalltask
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Please type the names of the images you remember seeing.
        Press Enter when done.
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = Type here recall answers
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Images/Fullattention.xlsx
    loopType = random
    nReps = 23
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    conditions:
      [{'Images': 'images/img1.jpg'},
      {'Images': 'images/img2.jpg'},
      {'Images': 'images/img3.jpg'},
      {'Images': 'images/img4.jpg'},
      {'Images': 'images/img5.jpg'},
      {'Images': 'images/img6.jpg'},
      {'Images': 'images/img7.jpg'},
      {'Images': 'images/img8.jpg'},
      {'Images': 'images/img9.jpg'},
      {'Images': 'images/img10.jpg'}]
    Routine Fullattenton
  LoopTerminator trials
  Routine trial
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = stimuli_with_math.xlsx
    loopType = random
    nReps = 23
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    conditions:
      [{'Images': 'images/img1.jpg', 'MathProblem': '12\xa0+\xa08\xa0=\xa0?'},
      {'Images': 'images/img2.jpg', 'MathProblem': '7 + 6 = ?'},
      {'Images': 'images/img3.jpg', 'MathProblem': '5 × 3 = ?'},
      {'Images': 'images/img4.jpg', 'MathProblem': '14 - 9 = ?'},
      {'Images': 'images/img5.jpg', 'MathProblem': '8 + 15 = ?'},
      {'Images': 'images/img6.jpg', 'MathProblem': '4\xa0+\xa07\xa0=\xa0?'},
      {'Images': 'images/img7.jpg', 'MathProblem': '14\xa0+\xa07\xa0=\xa0?'},
      {'Images': 'images/img8.jpg', 'MathProblem': '4\xa0+\xa015\xa0=\xa0?'},
      {'Images': 'images/img9.jpg', 'MathProblem': '13\xa0-\xa05\xa0=\xa0?'},
      {'Images': 'images/img10.jpg', 'MathProblem': '19\xa0-\xa010\xa0=\xa0?'}]
    Routine Dividedattention
  LoopTerminator trials_2
  Routine Recalltask
