PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1000, 800]
  expName = delaydiscounting
  keyboardBackend = ioHub
  runMode = 0
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Routines
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = discounting .csv
    loopType = random
    nReps = 14
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    conditions:
      [OrderedDict([('reward_today', 11), ('future_reward', 30), ('delay', 7)]),
      OrderedDict([('reward_today', 15), ('future_reward', 35), ('delay', 13)]),
      OrderedDict([('reward_today', 27), ('future_reward', 50), ('delay', 21)]),
      OrderedDict([('reward_today', 40), ('future_reward', 55), ('delay', 62)]),
      OrderedDict([('reward_today', 49), ('future_reward', 60), ('delay', 89)]),
      OrderedDict([('reward_today', 67), ('future_reward', 75), ('delay', 119)]),
      OrderedDict([('reward_today', 78), ('future_reward', 80), ('delay', 162)])]
  LoopTerminator trials
