PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1000, 800]
  expName = priming
  keyboardBackend = Pyglet
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text [set every repeat]:
        $t_1
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/prernabhandari/Documents/Study_word.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('study_word', 'book')]),
      OrderedDict([('study_word', 'cushion')]),
      OrderedDict([('study_word', 'phone')]),
      OrderedDict([('study_word', 'marble')]),
      OrderedDict([('study_word', 'board')]),
      OrderedDict([('study_word', 'Laptop')]),
      OrderedDict([('study_word', 'Chart')]),
      OrderedDict([('study_word', 'T-shirt')]),
      OrderedDict([('study_word', 'Mouse')]),
      OrderedDict([('study_word', 'Pastry')]),
      OrderedDict([('study_word', 'Case')]),
      OrderedDict([('study_word', 'Cruise')]),
      OrderedDict([('study_word', 'Police')]),
      OrderedDict([('study_word', 'Keys')]),
      OrderedDict([('study_word', 'Poster')])]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_words.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('t_1', 'l_pt_p'), ('Reference', 'Laptop'), ('old_new', 'old')]),
      OrderedDict([('t_1', '_ha_t'), ('Reference', 'Chart'), ('old_new', 'old')]),
      OrderedDict([('t_1', 'T_hi_t'), ('Reference', 'Tshirt'), ('old_new', 'old')]),
      OrderedDict([('t_1', '_ou_e'), ('Reference', 'mouse'), ('old_new', 'old')]),
      OrderedDict([('t_1', 'P_s_tr_'), ('Reference', 'Pastry'), ('old_new', 'old')]),
      OrderedDict([('t_1', 'c_s_'), ('Reference', 'Case'), ('old_new', 'old')]),
      OrderedDict([('t_1', '_ru_s_'), ('Reference', 'Cruise'), ('old_new', 'old')]),
      OrderedDict([('t_1', 'P_li_e'), ('Reference', 'Police'), ('old_new', 'old')]),
      OrderedDict([('t_1', 'K_y_'), ('Reference', 'Keys'), ('old_new', 'old')]),
      OrderedDict([('t_1', 'P_st_r'), ('Reference', 'Poster'), ('old_new', 'old')]),
      OrderedDict([('t_1', '_o_rd'), ('Reference', 'Board'), ('old_new', 'old')]),
      OrderedDict([('t_1', '_a_bl_'), ('Reference', 'Marble'), ('old_new', 'old')]),
      OrderedDict([('t_1', '_ho_e'), ('Reference', 'Phone'), ('old_new', 'old')]),
      OrderedDict([('t_1', '_oo_'), ('Reference', 'Book'), ('old_new', 'old')]),
      OrderedDict([('t_1', 'c_s_io_'), ('Reference', 'Cushion'), ('old_new', 'old')]),
      OrderedDict([('t_1', 'ta_l_'), ('Reference', 'Table'), ('old_new', 'new')]),
      OrderedDict([('t_1', 'p_nc_l'), ('Reference', 'Pencil'), ('old_new', 'new')]),
      OrderedDict([('t_1', 'v_s_'), ('Reference', 'Vase'), ('old_new', 'new')]),
      OrderedDict([('t_1', 'bo_t_e'), ('Reference', 'Bottle'), ('old_new', 'new')])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
    Routine test
  LoopTerminator trials_2
